PsychoPy2experiment version="2025.1.1"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001', 'Gender': '["Male", "Female", "Non-binary", "Prefer not to say"]', 'Age': "[18,19,20,21,22,23,24,'26+']", 'I consent*': 'False'}
  Full-screen window = True
  Monitor = testMonitor
  Save csv file = True
  Save log file = False
  Screen = 1
  Show mouse = True
  Units = height
  Window size (pixels) = [900, 1600]
  expName = squares
  keyboardBackend = ioHub
  measureFrameRate = False
  runMode = 1
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Routines
  Routine exp_2_Instructions
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    TextComponent Instructions_phase_1
      letterHeight = 0.04
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Clicking on the white square sometimes get you points. When points are are earned, click on the other white square that appears and you will earn your points. Please continue to click on the computer screen to earn points for the duration of the experiment. If you have questions, raise your hand and a researcher will come in and help you.
      wrapWidth = 1.3
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    MouseComponent mouse_3
      forceEndRoutineOnPress = any click
      saveMouseState = on click
      saveStartStop = False
      startVal [time (s)] = 2
      timeRelativeTo = experiment
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    CodeComponent code_3
      Code Type = Auto->JS
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      End Routine:
        globalClock.reset()  # Resets the global timer to 0
        stop_routine = False
  Routine main_square_exp_2
    RoutineSettingsComponent main_square_exp_2
      skipIf = stop_routine == True
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    CodeComponent code
      Code Type = Both
      Begin Experiment:
        score = 0
        phase_time = core.Clock()  # Start a new timer
        random_interval_set = False
      Begin JS Experiment:
        score = 0;
      Begin JS Routine:
        psychoJS.window.color = Background;
      Begin Routine:
        random_interval_set = False
        try:
            min_time = thisTrials_exp_2.data['min_time']
            max_time = thisTrials_exp_2.data['max_time']
            print('Set  min and max time correctly')
        except Exception as e:
            print(f"Error converting min_time or max_time to int: {e}")
            min_time, max_time = None, None

        try:
            print('Beginning routine')

            # Ensure min_time and max_time are valid before using them
            if min_time is None or max_time is None:
                raise ValueError("min_time or max_time is None")

            random_interval = randint(min_time, max_time)
            random_interval_set = True
            print('Set random interval correctly in the begin routine section!')

        except Exception as e:
            random_interval = 15  # Default fallback value
            print('Some general exception occurred!', e)
            print(f'While that was going down, min time was {min_time}, max time was {max_time}')
            print(f'Set random interval to {random_interval}')
            print("This error is nothing to take lightly.  If this happens DURING a trial (and not just between them) it can mean bad stuff.  Otherwise, it's safe to ignore it.")

        # Ensure 'background' is defined before using it
        # If 'background' is undefined, this will cause an error
        win.color = background  # (1.0000, 1.0000, 1.0000)

        clicked = False

        # Uncomment if needed:
        # if instructions_text is None:
        #     instructions_text = ' '

        # if phase_time.getTime() > end_time:
        #     continueRoutine = False
      Each Frame:
        # --- Phase timeout check ---
        try:
            # Ensure end_time is a number before comparison
            if end_time is not None:
                # Convert to float just in case it's not already numeric
                if float(globalClock.getTime()) > float(end_time):
                    print('Phase time expired, stopped routine!')
                    continueRoutine = False
                    stop_routine = True
            else:
                print("Warning: end_time is None, skipping phase timeout check.")
        except Exception as e:
            print(f"Error checking phase timeout: {e}")
            # Fail-safe: stop routine if timing breaks
            continueRoutine = False
            stop_routine = True


        # --- Random interval section ---
        if not random_interval_set:
            print('Random interval was not set! Trying to set now!')
            try:
                # Safely convert min_time and max_time to integers
                min_time = int(float(thisTrials_exp_2.data['min_time']))
                max_time = int(float(thisTrials_exp_2.data['max_time']))

                random_interval = randint(min_time, max_time)
                random_interval_set = True
                print('Successfully set random interval in each frame section')
            except Exception as e:
                print(f"Failed to set random interval: {e}")
                print('Throwing in the towel! Forcing random interval to 15 seconds.')
                random_interval = 15



        # --- Format safe values for display ---
        # --- Trial info safe wrappers ---
        # --- Reset debug vars each frame ---
        trial_num = None
        trial_time = None
        global_time = None
        min_time_val = None
        max_time_val = None
        rand_interval_val = None
        end_time_val = None

        interval_reached = False
        phase_expired = False
        can_score = False

        cont_routine_flag = None
        stop_routine_flag = None
        clicked_flag = None

        # --- Trial info safe wrappers ---
        try:
            trial_num = thisTrials_exp_2.thisTrialN + 1
        except:
            pass

        try:
            trial_time = phase_time.getTime()
        except:
            pass

        try:
            global_time = globalClock.getTime()
        except:
            pass

        try:
            min_time_val = float(min_time) if min_time is not None else None
        except:
            pass

        try:
            max_time_val = float(max_time) if max_time is not None else None
        except:
            pass

        try:
            rand_interval_val = float(random_interval)
        except:
            pass

        try:
            end_time_val = float(end_time)
        except:
            pass

        # --- Logic checks ---
        try:
            if trial_time is not None and rand_interval_val is not None:
                interval_reached = trial_time >= rand_interval_val
        except:
            pass

        try:
            if end_time_val is not None and global_time is not None:
                phase_expired = global_time > end_time_val
        except:
            pass

        try:
            can_score = interval_reached and not phase_expired
        except:
            pass

        # --- Safe flags ---
        try:
            cont_routine_flag = continueRoutine
        except:
            pass

        try:
            stop_routine_flag = stop_routine
        except:
            pass

        try:
            clicked_flag = clicked
        except:
            pass

        # --- Build debug string ---
        # --- Build debug string ---
        debug_status = """
        Component File: {}
        Trial: {}
        Trial Time: {}
        Global Clock: {}
        Score: {}

        min_time: {}
        max_time: {}
        Random Interval: {}

        Interval Reached? {}
        Phase Expired? {}
        Can Score? {}

        continueRoutine: {}
        stop_routine: {}
        Random Interval Set: {}
        Clicked: {}
        """.format(
            compnt_file if 'compnt_file' in locals() else "NA",
            trial_num if trial_num is not None else "NA",
            f"{trial_time:.2f}s" if trial_time is not None else "NA",
            f"{global_time:.2f}s" if global_time is not None else "NA",
            score if "score" in locals() else "NA",
            min_time_val if min_time_val is not None else "NA",
            max_time_val if max_time_val is not None else "NA",
            rand_interval_val if rand_interval_val is not None else "NA",
            interval_reached,
            phase_expired,
            can_score,
            cont_routine_flag,
            stop_routine_flag,
            random_interval_set if "random_interval_set" in locals() else "NA",
            clicked_flag
        )
    ButtonComponent button
      bold = True
      borderColor = -1.0000, -1.0000, -1.0000
      borderWidth = 0.1
      fillColor = 1.0000, 1.0000, 1.0000
      forceEndRoutine = False
      letterHeight = 0.05
      saveStartStop = False
      size = (0.5, 0.5)
      startVal [time (s)] = 0
      timeRelativeTo = experiment
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      callback:
        if t >= random_interval:  # If the routine has been running for 15 seconds
            continueRoutine = False  # End the routine
            if points is not None:
                try:
                    if float(points) >= 0:
                        clicked = True
                        # score += float(points)  # re-enable if needed
                except Exception as e:
                    print(f"Points value is invalid: {points} ({e})")
            else:
                print("Warning: points is None, skipping points check.")
    MouseComponent mouse_logging
      forceEndRoutineOnPress = never
      saveMouseState = on click
      saveStartStop = False
      startVal [time (s)] = 0.0
      timeRelativeTo = experiment
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    TextboxComponent textbox_routine_1
      autoLog = False
      bold = False
      borderColor = -1.0000, -1.0000, -1.0000
      borderWidth = 0.0
      color = -1.0000, -1.0000, -1.0000
      contrast = 0.0
      editable = False
      letterHeight = 0.04
      padding = 0.01
      pos = (0, 0.38)
      saveStartStop = False
      size = (0.4, 0.21)
      startVal [time (s)] = 0.0
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      text [set every repeat]:
        $instructions_text if instructions_text is not None else ' '
    TextboxComponent score_textbox
      autoLog = False
      bold = False
      borderWidth = 0.0
      color = -1.0000, -1.0000, -1.0000
      editable = False
      letterHeight = 0.1
      pos = (-0.7, 0.4)
      saveStartStop = False
      size = (0.15, 0.12)
      startVal [time (s)] = 0.0
      text [set every repeat] = $score
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    TextComponent text
      color = black
      letterHeight = 0.02
      pos = (-.5, 0.1)
      startVal [time (s)] = 0.0
      text [set every frame] = $debug_status
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  Routine points_square_exp_2
    RoutineSettingsComponent points_square_exp_2
      skipIf = clicked==False
      stopVal [duration (s)] = 3
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    ButtonComponent button_2
      bold = True
      borderColor = -1.0000, -1.0000, -1.0000
      borderWidth = 0.2
      callback = score += points
      fillColor = 1.0000, 1.0000, 1.0000
      forceEndRoutine = True
      letterHeight = 0.05
      pos = (0.5, -0.3)
      saveStartStop = False
      size = (0.2, 0.2)
      startVal [time (s)] = 0
      timeRelativeTo = experiment
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    TextboxComponent textbox
      autoLog = False
      bold = False
      borderColor = -1.0000, -1.0000, -1.0000
      borderWidth = 0
      editable = False
      letterHeight = 0.05
      pos = (0, 0.3)
      saveStartStop = False
      size = (0.4, 0.3)
      startVal [time (s)] = 0.0
      text [set every repeat] = $instructions_2_text if instructions_2_text is not None else ' '
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    MouseComponent mouse_logging_2
      forceEndRoutineOnPress = never
      saveMouseState = on click
      saveStartStop = False
      startVal [time (s)] = 0.0
      timeRelativeTo = experiment
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    CodeComponent code_2
      Code Type = Auto->JS
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      Each Frame:
        if globalClock.getTime() > end_time:#  if t > end_time:
            print('Phase time expired, stopped routine!')
        #    Trials_exp_2.finished = True
            continueRoutine = False
            stop_routine = True
    TextComponent text_2
      color = black
      letterHeight = 0.02
      pos = (-.5, 0.1)
      startVal [time (s)] = 0.0
      text [set every frame] = $debug_status
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  Routine routine_1
    RoutineSettingsComponent routine_1
      color = -1.0000, -1.0000, -1.0000
      stopVal [duration (s)] = 3
      useWindowParams = True
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    CodeComponent code_4
      Code Type = Auto->JS
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      Begin Routine:
        #win.color =  (0,0,0) #black #background # (1.0000, 1.0000, 1.0000)
      Each Frame:
        #win.color =  (0,0,0) #black #background # (1.0000, 1.0000, 1.0000)
      End Routine:
        globalClock.reset()  # Resets the global timer to 0
        stop_routine = False
    MouseComponent mouse
      forceEndRoutineOnPress = any click
      saveMouseState = on click
      saveStartStop = False
      startVal [time (s)] = 2
      timeRelativeTo = experiment
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    TextComponent Instructions_phase
      letterHeight = 0.04
      saveStartStop = False
      startVal [time (s)] = 0.0
      wrapWidth = 1.3
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Flow
  Routine exp_2_Instructions
  LoopInitiator trials2 loopType="TrialHandler"
    conditionsFile = bin/.csv/main_loop.csv
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('compnt_file', 'bin/.csv/component_1.csv')]),
      OrderedDict([('compnt_file', 'bin/.csv/component_2.csv')]),
      OrderedDict([('compnt_file', 'bin/.csv/component_3.csv')]),
      OrderedDict([('compnt_file', 'bin/.csv/component_4.csv')])]
    LoopInitiator Trials_exp_2 loopType="TrialHandler"
      conditionsFile = $compnt_file
      loopType = sequential
      nReps = 1
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      conditions:
        [{'min_time': 1, 'max_time': 2, 'end_time': 60, 'points': 1, 'background': 'green', 'instructions_text': 'Click the white square once every 15 seconds to get a point', 'instructions_2_text': 'Click this square fast!', 'conditional_instructions_1': None, 'conditional_instructions_2': None},
        {'min_time': 1, 'max_time': 2, 'end_time': 60, 'points': 1, 'background': 'green', 'instructions_text': 'Click the white square once every 15 seconds to get a point', 'instructions_2_text': 'Click this square fast!', 'conditional_instructions_1': None, 'conditional_instructions_2': None},
        {'min_time': 1, 'max_time': 2, 'end_time': 60, 'points': 0, 'background': 'yellow', 'instructions_text': 'Clicking the square will not get you a point right now', 'instructions_2_text': 'Clicking the square will not get you a point right now', 'conditional_instructions_1': None, 'conditional_instructions_2': None},
        {'min_time': 1, 'max_time': 2, 'end_time': 20, 'points': 1, 'background': 'green', 'instructions_text': 'Click the white square once every 15 seconds to get a point', 'instructions_2_text': 'Click this square fast!', 'conditional_instructions_1': None, 'conditional_instructions_2': None},
        {'min_time': 1, 'max_time': 2, 'end_time': 75, 'points': 1, 'background': 'green', 'instructions_text': 'Click the white square once every 15 seconds to get a point', 'instructions_2_text': 'Click this square fast!', 'conditional_instructions_1': None, 'conditional_instructions_2': None}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
      Routine main_square_exp_2
      Routine points_square_exp_2
    LoopTerminator Trials_exp_2
    Routine routine_1
  LoopTerminator trials2
