PsychoPy2experiment version="2025.1.1"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001', 'Gender': '["Male", "Female", "Non-binary", "Prefer not to say"]', 'Age': "[18,19,20,21,22,23,24,'26+']", 'I consent*': 'False'}
  Full-screen window = True
  Monitor = testMonitor
  Save csv file = True
  Save log file = False
  Screen = 3
  Show info dlg = False
  Show mouse = True
  Units = height
  Window size (pixels) = [1920, 1080]
  expName = squares
  keyboardBackend = ioHub
  measureFrameRate = False
  runMode = 1
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Routines
  Routine exp_2_Instructions
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    TextComponent Instructions_phase_1
      letterHeight = 0.04
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Clicking on the white square sometimes get you points. When points are are earned, click on the other white square that appears and you will earn your points. Please continue to click on the computer screen to earn points for the duration of the experiment. If you have questions, raise your hand and a researcher will come in and help you.
      wrapWidth = 1.3
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    MouseComponent mouse_3
      forceEndRoutineOnPress = any click
      saveMouseState = on click
      saveStartStop = False
      startVal [time (s)] = 2
      timeRelativeTo = experiment
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  Routine main_square_exp_2
    RoutineSettingsComponent main_square_exp_2
      color = $background
      skipIf = globalClock.getTime() > end_time
      useWindowParams = True
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    MouseComponent logging_mouse
      forceEndRoutineOnPress = never
      newClicksOnly = False
      saveMouseState = on click
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = scoring_interval
      timeRelativeTo = experiment
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    PolygonComponent click_square
      fillColor = white
      lineColor = black
      shape = rectangle
      size = (0.5, 0.5)
      startVal [time (s)] = 0
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    MouseComponent mouse_score
      clickable = click_square
      correctAns = click_square
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      startVal [time (s)] = scoring_interval
      storeCorrect = True
      timeRelativeTo = experiment
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    TextComponent big_text
      color = black
      letterHeight = 0.06
      pos = (-.5, 0.1)
      startVal [time (s)] = 0.0
      wrapWidth = 1
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      text [set every frame]:
        $f'''
        score:{score}
        score interval:{scoring_interval}
        clock {int(t)}
        Global Clock: {int(globalClock.getTime())}
        Core Clock:{int(core.getTime())}
        end time: {end_time}

        '''
    CodeComponent code
      Code Type = Auto->JS
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      Begin Experiment:
        score = 0
      Each Frame:
        if globalClock.getTime() > end_time:
            print(inner_trials.nRemaining)
            skip = int(inner_trials.nRemaining)
            inner_trials.skipTrials(skip)
    ButtonComponent button_2
      bold = True
      borderColor = red
      borderWidth = 2
      callback = globalClock.reset()
      fillColor = black
      forceEndRoutine = False
      letterHeight = 0.025
      pos = (0.5, 0.5)
      size = (0.3, 0.3)
      startVal [time (s)] = 0
      text = Reset Global Clock
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  Routine points_square_exp_2
    RoutineSettingsComponent points_square_exp_2
      color = $background
      skipIf = globalClock.getTime() > end_time
      stopVal [duration (s)] = 10
      useWindowParams = True
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    MouseComponent mouse_logging_2
      forceEndRoutineOnPress = never
      newClicksOnly = False
      saveMouseState = on click
      startVal [time (s)] = 0.0
      timeRelativeTo = experiment
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    ButtonComponent button
      bold = True
      callback = score += points
      forceEndRoutine = True
      letterHeight = 0.05
      pos = (0.4, -0.4)
      saveStartStop = False
      size = (0.1, 0.1)
      startVal [time (s)] = 0
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    TextboxComponent score_textbox_2
      autoLog = False
      bold = False
      borderWidth = 0.0
      color = -1.0000, -1.0000, -1.0000
      editable = False
      letterHeight = 0.1
      pos = (-0.7, 0.4)
      saveStartStop = False
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
      text [set every repeat] = $score
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  Routine routine_1
    RoutineSettingsComponent routine_1
      color = -1.0000, -1.0000, -1.0000
      stopVal [duration (s)] = 3
      useWindowParams = True
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    CodeComponent code_4
      Code Type = Auto->JS
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      Each Frame:
        #win.color =  (0,0,0) #black #background # (1.0000, 1.0000, 1.0000)
      End Routine:
        globalClock.reset()  # Resets the global timer to 0
        # stop_routine = False
    MouseComponent mouse
      forceEndRoutineOnPress = any click
      saveMouseState = final
      saveStartStop = False
      startVal [time (s)] = 2
      timeRelativeTo = experiment
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    TextComponent Instructions_phase
      letterHeight = 0.04
      saveStartStop = False
      startVal [time (s)] = 0.0
      wrapWidth = 1.3
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Flow
  LoopInitiator outer_trials loopType="TrialHandler"
    conditionsFile = bin/.csv/short_loop.csv
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('compnt_file', 'bin/.csv/component_1.csv')]),
      OrderedDict([('compnt_file', 'bin/.csv/component_2.csv')]),
      OrderedDict([('compnt_file', 'bin/.csv/component_3.csv')]),
      OrderedDict([('compnt_file', 'bin/.csv/component_4.csv')])]
    LoopInitiator inner_trials loopType="TrialHandler"
      conditionsFile = $compnt_file
      loopType = sequential
      nReps = 1
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      conditions:
        [{'min_time': 1, 'max_time': 2, 'end_time': 60, 'points': 1, 'background': 'green', 'instructions_text': 'Click the white square once every 15 seconds to get a point', 'instructions_2_text': 'Click this square fast!', 'conditional_instructions_1': None, 'conditional_instructions_2': None},
        {'min_time': 1, 'max_time': 2, 'end_time': 60, 'points': 1, 'background': 'green', 'instructions_text': 'Click the white square once every 15 seconds to get a point', 'instructions_2_text': 'Click this square fast!', 'conditional_instructions_1': None, 'conditional_instructions_2': None},
        {'min_time': 1, 'max_time': 2, 'end_time': 60, 'points': 0, 'background': 'yellow', 'instructions_text': 'Clicking the square will not get you a point right now', 'instructions_2_text': 'Clicking the square will not get you a point right now', 'conditional_instructions_1': None, 'conditional_instructions_2': None},
        {'min_time': 1, 'max_time': 2, 'end_time': 20, 'points': 1, 'background': 'green', 'instructions_text': 'Click the white square once every 15 seconds to get a point', 'instructions_2_text': 'Click this square fast!', 'conditional_instructions_1': None, 'conditional_instructions_2': None},
        {'min_time': 1, 'max_time': 2, 'end_time': 75, 'points': 1, 'background': 'green', 'instructions_text': 'Click the white square once every 15 seconds to get a point', 'instructions_2_text': 'Click this square fast!', 'conditional_instructions_1': None, 'conditional_instructions_2': None}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
      Routine main_square_exp_2
      Routine points_square_exp_2
    LoopTerminator inner_trials
    Routine routine_1
  LoopTerminator outer_trials
