PsychoPy2experiment version="2025.1.1"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001', 'Gender': '["Male", "Female", "Non-binary", "Prefer not to say"]', 'Age': "[18,19,20,21,22,23,24,'26+']", 'I consent*': 'False', 'experiment_selection': '["bin\\.csv_long\\main_loop_long.csv","bin\\.csv_short\\main_loop_short.csv"]'}
  Full-screen window = True
  Monitor = testMonitor
  Save csv file = True
  Save log file = False
  Screen = 1
  Show mouse = True
  Units = height
  Window size (pixels) = [1280, 720]
  expName = behavioral contrast
  expVersion = 0.1
  keyboardBackend = ioHub
  measureFrameRate = False
  runMode = 1
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Routines
  Routine exp_Instructions
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    TextComponent Instructions_phase_1
      letterHeight = 0.04
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Clicking on the white square sometimes get you points. When points are earned, click on the small white square that appears and you will earn your points. There is no pattern that you must learn. Please continue to click on the computer screen to earn points for the duration of the experiment. If you have questions, raise your hand and a researcher will come in and help you.
      wrapWidth = 1.3
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    MouseComponent mouse_3
      forceEndRoutineOnPress = any click
      saveMouseState = on click
      saveStartStop = False
      startVal [time (s)] = 2
      timeRelativeTo = experiment
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    CodeComponent code_2
      Code Type = Auto->JS
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      Before Experiment:
        component_clicks = 0
      End Routine:
        globalClock.reset()
  Routine main_square_screen
    RoutineSettingsComponent main_square_screen
      color = $background
      skipIf = globalClock.getTime() > end_time
      useWindowParams = True
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    MouseComponent logging_mouse
      forceEndRoutineOnPress = never
      newClicksOnly = False
      saveMouseState = on click
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = scoring_interval
      timeRelativeTo = experiment
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    PolygonComponent target
      fillColor = white
      lineColor = black
      lineWidth = 2
      pos = (-.3, 0)
      shape = rectangle
      size = (0.3, 0.3)
      startVal [time (s)] = 0
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    PolygonComponent alternative
      fillColor = -1.0000, -1.0000, 1.0000
      lineColor = black
      lineWidth = 2
      pos = (.3, 0)
      shape = rectangle
      size = (0.3, 0.3)
      startVal [time (s)] = 0
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    MouseComponent mouse_score
      clickable = target,alternative
      correctAns = click_square
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      startVal [time (s)] = scoring_interval
      timeRelativeTo = routine
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    TextComponent big_text
      color = black
      disabled = True
      letterHeight = 0.06
      pos = (-.5, 0.1)
      startVal [time (s)] = 0.0
      wrapWidth = 1
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      text [set every frame]:
        $f'''
        score:{score}
        points awarded next: {points}
        trial clock {int(t)}
        score interval:{scoring_interval}
        Global Clock: {int(globalClock.getTime())}
        end time: {end_time}

        Core Clock:{int(core.getTime())}
        points: {points}
        background: {background}

        '''
    CodeComponent code
      Code Type = Auto->JS
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      Begin Experiment:
        score = 0
        component_clicks = 0
      Begin Routine:
        thisExp.addData("score", score)
        mouseDown = False
      Each Frame:
        if globalClock.getTime() > end_time:
            print(f'inner_trials.nRemaining{inner_trials.nRemaining}')
            print(f'Skipping{inner_trials.nRemaining} trials')
            print(f'Time: global:{globalClock.getTime()} end time {end_time}')
            print(f'background{background}')
            skip = int(inner_trials.nRemaining)
            inner_trials.skipTrials(skip)
            continueRoutine = False

        #if logging_mouse.getPressed()[0] == 1 and not mouseDown:
        #    print('clicked')
        #    component_clicks += 1
        #    print(component_clicks)
        #


        # Inside your loop:
        if logging_mouse.getPressed()[0] == 1 and not mouseDown:
            print('clicked')
            component_clicks += 1
            print(component_clicks)
            mouseDown = True  # now it’s pressed

        # Reset when mouse is released
        if logging_mouse.getPressed()[0] == 0:
            mouseDown = False
      End Routine:
        # --- End Routine ---
        thisExp.addData('component_clicks', component_clicks)
        thisExp.addData('score', score)
        component_clicks = 0
    ButtonComponent clock_reset_button
      bold = True
      borderColor = red
      borderWidth = 2
      callback = globalClock.reset()
      disabled = True
      fillColor = black
      forceEndRoutine = False
      letterHeight = 0.025
      pos = (0.5, 0.45)
      saveStartStop = False
      size = (0.3, 0.1)
      startVal [time (s)] = 0
      text = Reset Global Clock
      timeRelativeTo = routine
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    TextComponent score_main_screen
      color = black
      letterHeight = 0.15
      pos = (-0.8, 0.44)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $score
      wrapWidth = 1
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  Routine points_square_screen
    RoutineSettingsComponent points_square_screen
      color = $background
      skipIf = globalClock.getTime() > end_time
      stopVal [duration (s)] = 3
      useWindowParams = True
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    MouseComponent mouse_logging_2
      forceEndRoutineOnPress = never
      newClicksOnly = False
      saveMouseState = on click
      startVal [time (s)] = 0.0
      timeRelativeTo = experiment
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    ButtonComponent button
      bold = True
      borderColor = black
      borderWidth = 2
      fillColor = white
      forceEndRoutine = True
      letterHeight = 0.05
      pos = (0.5, -0.4)
      saveStartStop = False
      size = (0.15, 0.15)
      startVal [time (s)] = 0
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      callback:
        print(mouse_score.clicked_name)
        print(reinforced_square)
        if str(mouse_score.clicked_name[0]) == reinforced_square:
            score += points
    TextComponent score_points_screen
      color = black
      letterHeight = 0.15
      pos = (-0.8, 0.44)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $score
      wrapWidth = 1
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  Routine blackout_screen
    RoutineSettingsComponent blackout_screen
      color = -1.0000, -1.0000, -1.0000
      stopVal [duration (s)] = 3
      useWindowParams = True
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    CodeComponent code_4
      Code Type = Auto->JS
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      Each Frame:
        #win.color =  (0,0,0) #black #background # (1.0000, 1.0000, 1.0000)
      End Routine:
        globalClock.reset()  # Resets the global timer to 0
        # stop_routine = False
        component_clicks = 0
    MouseComponent mouse
      forceEndRoutineOnPress = any click
      newClicksOnly = False
      saveMouseState = final
      saveStartStop = False
      startVal [time (s)] = 2
      timeRelativeTo = experiment
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    TextComponent Instructions_phase
      letterHeight = 0.04
      saveStartStop = False
      startVal [time (s)] = 0.0
      wrapWidth = 1.3
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Flow
  Routine exp_Instructions
  LoopInitiator outer_trials loopType="TrialHandler"
    conditionsFile = $expInfo['experiment_selection']
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('compnt_file', 'bin/.csv/component_1.csv')]),
      OrderedDict([('compnt_file', 'bin/.csv/component_2.csv')]),
      OrderedDict([('compnt_file', 'bin/.csv/component_1.csv')]),
      OrderedDict([('compnt_file', 'bin/.csv/component_2.csv')]),
      OrderedDict([('compnt_file', 'bin/.csv/component_1.csv')]),
      OrderedDict([('compnt_file', 'bin/.csv/component_2.csv')]),
      OrderedDict([('compnt_file', 'bin/.csv/component_1.csv')]),
      OrderedDict([('compnt_file', 'bin/.csv/component_2.csv')]),
      OrderedDict([('compnt_file', 'bin/.csv/component_3.csv')]),
      OrderedDict([('compnt_file', 'bin/.csv/component_4.csv')]),
      OrderedDict([('compnt_file', 'bin/.csv/component_3.csv')]),
      OrderedDict([('compnt_file', 'bin/.csv/component_4.csv')]),
      OrderedDict([('compnt_file', 'bin/.csv/component_3.csv')]),
      OrderedDict([('compnt_file', 'bin/.csv/component_4.csv')]),
      OrderedDict([('compnt_file', 'bin/.csv/component_3.csv')]),
      OrderedDict([('compnt_file', 'bin/.csv/component_4.csv')]),
      OrderedDict([('compnt_file', 'bin/.csv/component_1.csv')]),
      OrderedDict([('compnt_file', 'bin/.csv/component_2.csv')]),
      OrderedDict([('compnt_file', 'bin/.csv/component_1.csv')]),
      OrderedDict([('compnt_file', 'bin/.csv/component_2.csv')]),
      OrderedDict([('compnt_file', 'bin/.csv/component_1.csv')]),
      OrderedDict([('compnt_file', 'bin/.csv/component_2.csv')]),
      OrderedDict([('compnt_file', 'bin/.csv/component_1.csv')]),
      OrderedDict([('compnt_file', 'bin/.csv/component_2.csv')]),
      OrderedDict([('compnt_file', 'bin/.csv/component_3.csv')])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
    LoopInitiator inner_trials loopType="TrialHandler"
      conditionsFile = $compnt_file
      loopType = sequential
      nReps = 1
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      conditions:
        [{'min_time': 1, 'max_time': 2, 'end_time': 60, 'points': 1, 'background': 'green', 'instructions_text': 'Click the white square once every 15 seconds to get a point', 'instructions_2_text': 'Click this square fast!', 'conditional_instructions_1': None, 'conditional_instructions_2': None},
        {'min_time': 1, 'max_time': 2, 'end_time': 60, 'points': 1, 'background': 'green', 'instructions_text': 'Click the white square once every 15 seconds to get a point', 'instructions_2_text': 'Click this square fast!', 'conditional_instructions_1': None, 'conditional_instructions_2': None},
        {'min_time': 1, 'max_time': 2, 'end_time': 60, 'points': 0, 'background': 'yellow', 'instructions_text': 'Clicking the square will not get you a point right now', 'instructions_2_text': 'Clicking the square will not get you a point right now', 'conditional_instructions_1': None, 'conditional_instructions_2': None},
        {'min_time': 1, 'max_time': 2, 'end_time': 20, 'points': 1, 'background': 'green', 'instructions_text': 'Click the white square once every 15 seconds to get a point', 'instructions_2_text': 'Click this square fast!', 'conditional_instructions_1': None, 'conditional_instructions_2': None},
        {'min_time': 1, 'max_time': 2, 'end_time': 75, 'points': 1, 'background': 'green', 'instructions_text': 'Click the white square once every 15 seconds to get a point', 'instructions_2_text': 'Click this square fast!', 'conditional_instructions_1': None, 'conditional_instructions_2': None}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
      Routine main_square_screen
      Routine points_square_screen
    LoopTerminator inner_trials
    Routine blackout_screen
  LoopTerminator outer_trials
